pcl_file = "checkergs.pcl"; 
default_deltat = 167;

begin;

picture {
   
   background_color = 0,0,0;
   
   } default;

box { height = 1; width = 1; color = 255,255,255; } box1;
box { height = 1; width = 1; color = 255,255,255; } box2;

picture {} pic1;
picture {} pic2; 

sound {
wavefile { filename = "to1.wav"; };
} so1;
sound {
wavefile { filename = "to2.wav"; };
} so2;
sound {
wavefile { filename = "to3.wav"; };
} so3;
sound {
wavefile { filename = "to4.wav"; };
} so4;
sound {
wavefile { filename = "to5.wav"; };
} so5;
sound {
wavefile { filename = "to6.wav"; };
} so6;
sound {
wavefile { filename = "to7.wav"; };
} so7;
sound {
wavefile { filename = "to8.wav"; };
} so8;
sound {
wavefile { filename = "to9.wav"; };
} so9;
sound {
wavefile { filename = "to10.wav"; };
} so10;
sound {
wavefile { filename = "to11.wav"; };
} so11;
sound {
wavefile { filename = "to12.wav"; };
} so12;
sound {
wavefile { filename = "to13.wav"; };
} so13;
sound {
wavefile { filename = "to14.wav"; };
} so14;
sound {
wavefile { filename = "to15.wav"; };
} so15;

trial {
   trial_duration = 60000; 
   picture default;
   time=0;
   code = "repos";       
   picture pic1;
   time = 30000;
   code = "inici bloc";    
   picture pic2;
   LOOP $i 100;
   picture pic1;
   code = 1;
   picture pic2;
   code = 2;
   ENDLOOP;   
   
sound so1;
time = 30000;
code="so 1";
sound so2;
time = 30400;
code="so 2";
sound so3;
time = 30800;
code="so 3";
sound so4;
time = 31200;
code="so 4";
sound so5;
time = 31600;
code="so 5";
sound so6;
time = 32000;
code="so 6";
sound so7;
time = 32400;
code="so 7";
sound so8;
time = 32800;
code="so 8";
sound so9;
time = 33200;
code="so 9";
sound so10;
time = 33600;
code="so 10";
sound so11;
time = 34000;
code="so 11";
sound so12;
time = 34400;
code="so 12";
sound so13;
time = 34800;
code="so 13";
sound so14;
time = 35200;
code="so 14";
sound so15;
time = 35600;
code="so 15";
sound so1;
time = 36000;
code="so 1";
sound so2;
time = 36400;
code="so 2";
sound so3;
time = 36800;
code="so 3";
sound so4;
time = 37200;
code="so 4";
sound so5;
time = 37600;
code="so 5";
sound so6;
time = 38000;
code="so 6";
sound so7;
time = 38400;
code="so 7";
sound so8;
time = 38800;
code="so 8";
sound so9;
time = 39200;
code="so 9";
sound so10;
time = 39600;
code="so 10";
sound so11;
time = 40000;
code="so 11";
sound so12;
time = 40400;
code="so 12";
sound so13;
time = 40800;
code="so 13";
sound so14;
time = 41200;
code="so 14";
sound so15;
time = 41600;
code="so 15";
sound so1;
time = 42000;
code="so 1";
sound so2;
time = 42400;
code="so 2";
sound so3;
time = 42800;
code="so 3";
sound so4;
time = 43200;
code="so 4";
sound so5;
time = 43600;
code="so 5";
sound so6;
time = 44000;
code="so 6";
sound so7;
time = 44400;
code="so 7";
sound so8;
time = 44800;
code="so 8";
sound so9;
time = 45200;
code="so 9";
sound so10;
time = 45600;
code="so 10";
sound so11;
time = 46000;
code="so 11";
sound so12;
time = 46400;
code="so 12";
sound so13;
time = 46800;
code="so 13";
sound so14;
time = 47200;
code="so 14";
sound so15;
time = 47600;
code="so 15";
sound so1;
time = 48000;
code="so 1";
sound so2;
time = 48400;
code="so 2";
sound so3;
time = 48800;
code="so 3";
sound so4;
time = 49200;
code="so 4";
sound so5;
time = 49600;
code="so 5";
sound so6;
time = 50000;
code="so 6";
sound so7;
time = 50400;
code="so 7";
sound so8;
time = 50800;
code="so 8";
sound so9;
time = 51200;
code="so 9";
sound so10;
time = 51600;
code="so 10";
sound so11;
time = 52000;
code="so 11";
sound so12;
time = 52400;
code="so 12";
sound so13;
time = 52800;
code="so 13";
sound so14;
time = 53200;
code="so 14";
sound so15;
time = 53600;
code="so 15";
sound so1;
time = 54000;
code="so 1";
sound so2;
time = 54400;
code="so 2";
sound so3;
time = 54800;
code="so 3";
sound so4;
time = 55200;
code="so 4";
sound so5;
time = 55600;
code="so 5";
sound so6;
time = 56000;
code="so 6";
sound so7;
time = 56400;
code="so 7";
sound so8;
time = 56800;
code="so 8";
sound so9;
time = 57200;
code="so 9";
sound so10;
time = 57600;
code="so 10";
sound so11;
time = 58000;
code="so 11";
sound so12;
time = 58400;
code="so 12";
sound so13;
time = 58800;
code="so 13";
sound so14;
time = 59200;
code="so 14";
sound so15;
time = 59600;
code="so 15";

}trial1;
trial {
   trial_duration= 10000;
   picture default;
   time=0;
}trial2;

